PsychoPy2experiment version="2023.2.2"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1280, 720]
  expName = bart
  keyboardBackend = ioHub
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Routines
  Routine choice
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    CodeComponent balloonSize
      Code Type = Py
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      Begin Experiment:
        import numpy as np

        # number of balloons (i.e., trials) (128 in the original blue-balloon study)
        # this is also the highest number of pumps permitted overall
        nTrials = 4

        # list of pumps that will make the balloon explode
        maxPumps = np.arange(nTrials)+1
        np.random.shuffle(maxPumps) # permute the order

        pumpWorth = 0.5 # worth of each pump. it could be "points" as in a videogame, or money (e.g., $0.05 in the original study)

        # initialize values to be updated during the task
        bankedPumps = 0
        earnings = 0
        earnings_thisBalloon = 0
        earnings_previousBalloon = 0
      Begin Routine:
        ## beginning of each trial (i.e., a new balloon)

        # initial balloon size
        ySize_start = 0.2
        xSize_start = ySize_start/2

        # (re)set num of pumps made to 0
        nPumps=0;

        # initialize to false
        popped = False;

        # at which pump is this ballon (trial) going to pop?
        popTrial = maxPumps[trials.thisN]
      Each Frame:
        # update balloon's size

        yFactor = 1.5/nTrials # the highest it can grow to fill the screen divided in as many steps as the largest num of pumps ever possible (= same as num of trials)
        xFactor = yFactor/2

        xSize = xSize_start + nPumps*xFactor
        ySize = ySize_start + nPumps*yFactor
      End Routine:
        # earnings for this balloon (trial)
        if popped==False:
            earnings_thisBalloon = np.round(nPumps*pumpWorth,2)
            if trials.thisN==0:
                bankedPumps = nPumps
            else:
                bankedPumps = bankedPumps + nPumps

        else:
            earnings_thisBalloon = 0


        # cumulative earnings so far across all balloons (trials)
        earnings = np.round(bankedPumps*pumpWorth, 2)


        #save data
        trials.addData('nPumps_wouldPop', popTrial)
        trials.addData('nPumps_done', nPumps)
        trials.addData('popped', popped)
        trials.addData('earnings_thisBalloon', earnings_thisBalloon)
        trials.addData('bankedPumps', bankedPumps)
        trials.addData('earnings', earnings)
        #trials.addData('earnings', thisBalloonEarnings)
        trials.addData('xSize', xSize)
        trials.addData('ySize', ySize)


        earnings_previousBalloon = earnings_thisBalloon
    PolygonComponent balloon
      anchor = bottom-center
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.8)
      shape = circle
      size [set every frame] = (xSize, ySize)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent bank
      letterHeight = 0.05
      pos = (-0.7, -0.9)
      startVal [time (s)] = 0.0
      text = press "A" to BANK
      units = norm
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    TextComponent pump
      letterHeight = 0.05
      pos = (0.0, -0.9)
      startVal [time (s)] = 0.0
      text = press "L" to PUMP
      units = norm
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    TextComponent earning
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      text [set every frame] = $"total banked: " + str(earnings)
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    TextComponent earningpreviousBalloon
      letterHeight = 0.05
      pos = (0.7, -0.9)
      startVal [time (s)] = 0.0
      text [set every frame] = $"previous balloon: " + str(earnings_previousBalloon)
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    TextComponent debugText
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      text [set every frame] = $"num of pumps made: " + str(nPumps) + "; it will pop after: " + str(popTrial)
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    CodeComponent updatePumps
      Code Type = Py
      Each Frame:
        if event.getKeys(['l']):
            nPumps = nPumps+1
            if nPumps > popTrial:
                popped=True
                bangDuration = 1
                continueRoutine=False

        if event.getKeys(['a'])  and  nPumps>0:
            popped=False
            bangDuration = 0
            continueRoutine=False
  Routine ending
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    TextComponent feedbackFinal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $"Total earned: " + str(earnings)
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine boomSlide
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    TextComponent text
      color = -1.0000, -1.0000, 1.0000
      durationEstim = 1
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $bangDuration
      text = BOOM!!
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    PolygonComponent polygon
      disabled = True
      fillColor = white
      shape = custom polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      vertices = [[0,0.5,0,-0.5], [0.5,0,-0.5,0]]
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    SoundComponent soundEffect
      sound = bang.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $bangDuration
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = nTrials
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    Routine choice
    Routine boomSlide
  LoopTerminator trials
  Routine ending
