PsychoPy2experiment version="2023.2.2"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s_%s' % (expName, expInfo['participant'], expInfo['day'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': 'DM999', 'day': '1', 'session': 'post'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 720]
  expName = bart
  keyboardBackend = ioHub
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Routines
  Routine choice
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    CodeComponent balloonSize
      Code Type = Py
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      Begin Routine:
        ## beginning of each trial (i.e., a new balloon)

        # initial balloon size
        ySize_start = 0.2
        xSize_start = ySize_start/2

        # (re)set num of pumps made to 0
        nPumps=0;

        # initialize to false
        popped = False;

        # at what time has this trial started?

        # at which pump is this ballon (trial) going to pop?
        # one balloon will pop after the second pump differently from the original paper
        # this is the reason: if the balloon pops after the first trial, there is nothing the participant could have done to earn points on that balloon and no decision-making happens in that trial
        popPump = maxPumps[trials.thisN]
      Each Frame:
        # update balloon's size

        yFactor = 1.5/nTrials # the highest it can grow to fill the screen divided in as many steps as the largest num of pumps ever possible (= same as num of trials)
        xFactor = yFactor/2

        xSize = xSize_start + nPumps*xFactor
        ySize = ySize_start + nPumps*yFactor
      End Routine:
        # earnings for this balloon (trial)
        if popped==False:
            earnings_thisBalloon = np.round(nPumps*pumpWorth,2)
            if trials.thisN==0:
                bankedPumps = nPumps
            else:
                bankedPumps = bankedPumps + nPumps

        else:
            earnings_thisBalloon = 0


        # cumulative earnings so far across all balloons (trials)
        earnings = np.round(bankedPumps*pumpWorth, 2)


        #save data
        trials.addData('nPumps_wouldPop', popPump)
        trials.addData('nPumps_done', nPumps)
        trials.addData('popped', popped)
        trials.addData('earnings_thisBalloon', earnings_thisBalloon)
        trials.addData('bankedPumps', bankedPumps)
        trials.addData('earnings', earnings)
        #trials.addData('earnings', thisBalloonEarnings)
        trials.addData('xSize', xSize)
        trials.addData('ySize', ySize)





        earnings_previousBalloon = earnings_thisBalloon
    PolygonComponent balloon
      anchor = bottom-center
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.8)
      shape = circle
      size [set every frame] = (xSize, ySize)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent bank
      letterHeight = 0.05
      pos = (-0.7, -0.9)
      startVal [time (s)] = 0.0
      text = press "A" to BANK
      units = norm
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    TextComponent pump
      letterHeight = 0.05
      pos = (0.0, -0.9)
      startVal [time (s)] = 0.0
      text = press "L" to PUMP
      units = norm
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    TextComponent earning
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      text [set every frame] = $"total banked: " + str(earnings)
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    TextComponent earningpreviousBalloon
      letterHeight = 0.05
      pos = (0.7, -0.9)
      startVal [time (s)] = 0.0
      text [set every frame] = $"previous balloon: " + str(earnings_previousBalloon)
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    TextComponent debugText
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      text [set every frame] = $"num of pumps made: " + str(nPumps) + "; the balloon will explode on " + str(popPump) + "+1"
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    CodeComponent updatePumps
      Code Type = Py
      Each Frame:
        if event.getKeys(['l']):
            nPumps = nPumps+1
            if nPumps > popPump:
                popped=True
                bangDuration = 1
                continueRoutine=False

        if event.getKeys(['a'])  and  nPumps>0:
            popped=False
            bangDuration = 0
            continueRoutine=False
  Routine boomSlide
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    TextComponent text
      color = -1.0000, -1.0000, 1.0000
      durationEstim = 1
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $bangDuration
      text = BOOM!!
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    PolygonComponent polygon
      disabled = True
      fillColor = white
      shape = custom polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      vertices = [[0,0.5,0,-0.5], [0.5,0,-0.5,0]]
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    SoundComponent soundEffect
      sound = bang.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $bangDuration
      syncScreenRefresh = False
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  Routine intro2
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    ImageComponent instructions2
      image = instructions/Slide2.JPG
      size = (2,2)
      startVal [time (s)] = 0.0
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    KeyboardComponent moveOn2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro1
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    ImageComponent instructions1
      image = instructions/Slide1.JPG
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent moveOn1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro3
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    ImageComponent instructions3
      image = instructions/Slide3.JPG
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent moveOn3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro4
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    ImageComponent instructions4
      image = instructions/Slide4.JPG
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent startPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent practiceSettings
      Code Type = Py
      Begin Routine:
        import numpy as np

        # number of balloons (i.e., trials) (128 in the original blue-balloon study)
        # this is also the highest number of pumps that do not make the balloon explode
        nTrials = 60

        # max pumps that will NOT make the balloon explode but one more and the balloon will explode
        maxPumps = np.arange(nTrials)
        np.random.shuffle(maxPumps) # permute the order

        pumpWorth = 0.05 # worth of each pump. it could be "points" as in a videogame, or money (e.g., $0.05 in the original study)

        # initialize values to be updated during the task
        bankedPumps = 0
        earnings = 0
        earnings_thisBalloon = 0
        earnings_previousBalloon = 0
  Routine practiceStart
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  Routine taskStart
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    ImageComponent preTask
      image = instructions/Slide6.JPG
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent startTask
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent taskSettings
      Code Type = Py
      Begin Routine:
        import numpy as np

        # number of balloons (i.e., trials) (128 in the original blue-balloon study)
        # this is also the highest number of pumps that do not make the balloon explode
        nTrials = 60

        # max pumps that will NOT make the balloon explode but one more and the balloon will explode
        maxPumps = np.arange(nTrials)
        np.random.shuffle(maxPumps) # permute the order

        pumpWorth = 0.05 # worth of each pump. it could be "points" as in a videogame, or money (e.g., $0.05 in the original study)

        # initialize values to be updated during the task
        bankedPumps = 0
        earnings = 0
        earnings_thisBalloon = 0
        earnings_previousBalloon = 0
  Routine choicePractice
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    CodeComponent balloonSize_2
      Code Type = Py
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      Begin Routine:
        ## beginning of each trial (i.e., a new balloon)

        # initial balloon size
        ySize_start = 0.2
        xSize_start = ySize_start/2

        # (re)set num of pumps made to 0
        nPumps=0;

        # initialize to false
        popped = False;

        # at what time has this trial started?

        # at which pump is this ballon (trial) going to pop?
        # one balloon will pop after the first pump as in the original paper
        popPump = maxPumps[practiceTrials.thisN]
      Each Frame:
        # update balloon's size

        yFactor = 1.5/nTrials # the highest it can grow to fill the screen divided in as many steps as the largest num of pumps ever possible (= same as num of trials)
        xFactor = yFactor/2

        xSize = xSize_start + nPumps*xFactor
        ySize = ySize_start + nPumps*yFactor
      End Routine:
        # earnings for this balloon (trial)
        if popped==False:
            earnings_thisBalloon = np.round(nPumps*pumpWorth,2)
            if practiceTrials.thisN==0:
                bankedPumps = nPumps
            else:
                bankedPumps = bankedPumps + nPumps

        else:
            earnings_thisBalloon = 0


        # cumulative earnings so far across all balloons (trials)
        earnings = np.round(bankedPumps*pumpWorth, 2)



        earnings_previousBalloon = earnings_thisBalloon
    PolygonComponent balloon_2
      anchor = bottom-center
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.8)
      shape = circle
      size [set every frame] = (xSize, ySize)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent bank_2
      letterHeight = 0.05
      pos = (-0.7, -0.9)
      startVal [time (s)] = 0.0
      text = press "A" to BANK
      units = norm
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    TextComponent pump_2
      letterHeight = 0.05
      pos = (0.0, -0.9)
      startVal [time (s)] = 0.0
      text = press "L" to PUMP
      units = norm
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    TextComponent earning_2
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      text [set every frame] = $"total banked: " + str(earnings)
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    TextComponent earningpreviousBalloon_2
      letterHeight = 0.05
      pos = (0.7, -0.9)
      startVal [time (s)] = 0.0
      text [set every frame] = $"previous balloon: " + str(earnings_previousBalloon)
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    TextComponent debugText_2
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      text [set every frame] = $"num of pumps made: " + str(nPumps) + "; the balloon will explode on " + str(popPump) + "+1"
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    KeyboardComponent key_resp_3
      allowedKeys = 'a','l'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    CodeComponent updatePumps_2
      Code Type = Py
      Each Frame:
        if event.getKeys(['l']):
            nPumps = nPumps+1
            if nPumps > popPump:
                popped=True
                bangDuration = 1
                continueRoutine=False

        if event.getKeys(['a'])  and  nPumps>0:
            popped=False
            bangDuration = 0
            continueRoutine=False
  Routine endTask
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    TextComponent feedbackFinal
      letterHeight = 0.10
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $"Total banked: " + str(earnings)
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine endPractice
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    ImageComponent practiceEnd
      image = instructions/Slide5.JPG
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent feedbackFinal_2
      letterHeight = 0.10
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Total banked: " + str(earnings)
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    KeyboardComponent moveOn4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questionnaire
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    ImageComponent image
      image = questionnaire.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SliderComponent q1
      forceEndRoutine = False
      granularity = 0
      labels = ("not at all", "completely")
      letterHeight = 0.05
      pos = (0, 0.5)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
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    SliderComponent q2
      forceEndRoutine = False
      granularity = 0
      labels = ("not at all", "completely")
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (0, 100)
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    SliderComponent q3
      forceEndRoutine = False
      granularity = 0
      labels = ("not at all", "completely")
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (0, 100)
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    SliderComponent q4
      forceEndRoutine = False
      granularity = 0
      labels = ("not at all", "completely")
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (0, 100)
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    SliderComponent q5
      forceEndRoutine = False
      granularity = 0
      labels = ("not at all", "completely")
      letterHeight = 0.05
      pos = (0, -0.7)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (0, 100)
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    KeyboardComponent moveOn6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine rewardAnnounce
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    ImageComponent announce
      image = instructions/Slide5b.JPG
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent moveOn5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine motivation
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    TextComponent Head_motivation
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.08
      pos = (0, 0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I am motivated to perform well...
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    FormComponent form_motivation
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.000
      Items = motivation.csv
      Randomize = True
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent next_motivation
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [condition] = form_motivation.complete
      text = Press bar to submit
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    KeyboardComponent next_bar_motivation
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = form_motivation.complete
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Flow
  Routine intro1
  Routine intro2
  Routine intro3
  Routine intro4
  LoopInitiator practiceTrials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine choicePractice
    Routine boomSlide
  LoopTerminator practiceTrials
  Routine endPractice
  Routine rewardAnnounce
  Routine motivation
  Routine taskStart
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = nTrials
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    Routine choice
    Routine boomSlide
  LoopTerminator trials
  Routine endTask
